//import imagej
import ij.IJ;
import ij.measure.ResultsTable;
import ij.plugin.frame.RoiManager;
import ij.WindowManager; 
import ij.ImagePlus;

//import java chart methods
import java.awt.Color;
import java.awt.Shape;
import java.awt.geom.Ellipse2D;
import java.awt.geom.Point2D;

import org.jfree.chart.axis.LogAxis;
import org.jfree.chart.axis.NumberTickUnit;
import org.jfree.chart.plot.PlotOrientation;
import org.jfree.chart.plot.XYPlot;
import org.jfree.chart.renderer.xy.XYLineAndShapeRenderer;
import org.jfree.chart.JFreeChart;
import org.jfree.chart.ChartFactory;
import org.jfree.chart.ChartFrame;
import org.jfree.data.xy.XYSeries;
import org.jfree.data.xy.XYSeriesCollection;

// generate color list
colors = new Color[9];
colors[0] = Color.red;
colors[1] = Color.blue;
colors[2] = Color.black;
colors[3] = Color.green;
colors[4] = Color.yellow;
colors[5] = Color.cyan;
colors[6] = Color.magenta;
colors[7] = Color.orange;
colors[8] = Color.pink;

// get number of ROIs
IJ.run("Set Measurements...", "mean stack redirect=None decimal=3");
RoiManager rm = RoiManager.getInstance();
int NROI = rm.getCount();

//create graph
//create collection of series
dataset = new XYSeriesCollection();
for (i = 0;i<NROI;i++){
	//name and add the series
	series = new XYSeries(String.valueOf(i+1));
	dataset.addSeries(series);
}
JFreeChart chart = ChartFactory.createTimeSeriesChart("Time Traces", // Title
          "Time(s)", // x-axis Label
          "Intensity(ADU)", // y-axis Label
          dataset, // Dataset
          true, // Show Legend
          true, // Use tooltips
          false // Configure chart to generate URLs?
      );
/*
JFreeChart chart = ChartFactory.createScatterPlot("Time Traces", // Title
          "Time(frames)", // x-axis Label
          "Intensity(ADU)", // y-axis Label
          dataset, // Dataset
          PlotOrientation.VERTICAL, // Plot Orientation
          true, // Show Legend
          true, // Use tooltips
          false // Configure chart to generate URLs?
      );
     */
XYPlot plot = (XYPlot) chart.getPlot();
plot.setBackgroundPaint(Color.white);
plot.setRangeGridlinePaint(Color.lightGray);

XYLineAndShapeRenderer renderer = (XYLineAndShapeRenderer) plot.getRenderer();
renderer.setBaseShapesVisible(true);
Shape circle = new Ellipse2D.Float(-2.0f, -2.0f, 4.0f, 4.0f);
//plot series in different colors
for (i=0;i<NROI;i++){
   renderer.setSeriesPaint(i, colors[i%9]);
   renderer.setSeriesFillPaint(i, Color.white);
   renderer.setSeriesLinesVisible(i, true);
   renderer.setSeriesShape(i, circle, false);
}
renderer.setUseFillPaint(true);
ChartFrame graphFrame = new ChartFrame("Graph", chart);
graphFrame.getChartPanel().setMouseWheelEnabled(true);
graphFrame.pack();
graphFrame.setVisible(true);

// close displays
disp = mm.displays();
disp.closeAllDisplayWindows(false);
rt=ij.measure.ResultsTable.getResultsTable();
IJ.run("Clear Results", "");
chart.setNotify(false);

// select all rois
selectArray = new int[NROI];
for (i=0;i<NROI;i++){
	selectArray[i]=i;
}
rm.setSelectedIndexes(selectArray);
rm.runCommand("Remove Slice Info");

// start acquisition
nFrames = 0; //image analysed
long startTime = System.currentTimeMillis();
long updateTime = 0;
long elapsedTime = -3600000;
store = mm.AcquisitionEngine.acquire();

while (mm.AcquisitionEngine.isAcquisitionRunning()){
	//get image if there is a new one (event manager should be used maybe?)
	currIm=store.getNumImages();
	if (currIm>nFrames) {
		nFrames=currIm;
		ImagePlus imp = WindowManager.getCurrentImage();
		if (imp != null) {
			rm.runCommand("Measure");
			for (i=0;i<NROI;i++){
				data=rt.getValueAsDouble(1,i);
				series = dataset.getSeries(String.valueOf(i+1));
				series.add(elapsedTime, data);
			}
			elapsedTime = System.currentTimeMillis()-startTime-3600000;
			rm.runCommand("Show All");
			IJ.run("Clear Results", "");
		}
		if ((System.currentTimeMillis()-updateTime)>1000){
			updateTime=System.currentTimeMillis();
			chart.setNotify(true);
			chart.setNotify(false);
		}
	} else {
		mmc.sleep(10);
	}	
}

//calculate times
frameTime = (elapsedTime+3600000)/nFrames;

chart.setNotify(true);
ImagePlus imp = WindowManager.getCurrentImage();
nFrame = imp.getNFrames();
ResultsTable rt = new ResultsTable();
rm.runCommand("Deselect");
rt = rm.multiMeasure(imp);
for (i=0;i<nFrame;i++){
	time = Double.valueOf(i)*Double.valueOf(frameTime)/1000;
	rt.setValue("time(s)",i,time);
}

rt.show("Results");
data = new double[NROI][nFrame];
for (i=0;i<NROI;i++){
	series = dataset.getSeries(String.valueOf(i+1));
	series.clear();
	for (j=0;j<nFrame;j++){
		data[i][j] = rt.getValueAsDouble(i,j);
		series.add((j*frameTime)-3600000, data[i][j]);
	}
}

